 #  *********************************************************************
#  * DISCLAIMER                                                        *
#  *                                                                   *
#  * Neither the authors of this software system, nor their employing  *
#  * institutes, nor the agencies providing financial support for this *
#  * work make any representation or warranty, express or implied,     *
#  * regarding this software system or assume any liability for its    *
#  * use.                                                              *
#  *                                                                   *
#  * This code implementation is the intellectual property of the      *
#  * OpenGATE collaboration.                                           *
#  * By copying, distributing or modifying the Program (or any work    *
#  * based on the Program) you indicate your acceptance of this        *
#  * statement, and all its terms.                                     *
#  *********************************************************************
#
                                                          
#-------------------oooooOOOOO00000OOOOOooooo---------------------#
#
#         D E F I N E   Y O U R   S C A N N E R   A N D       
#                                                             
#        Y O U R   C O M P L E T E   S I M U L A T I O N   
#                                                             
#        F O R   I M A G I N G    A P P L I CA T I O N S       
#                                                     
#-------------------oooooOOOOO00000OOOOOooooo---------------------#


#=====================================================
# VISUALISATION
#=====================================================

/vis/disable

/control/execute                    Verbose.mac


#=====================================================
# GEOMETRY
#=====================================================


/gate/geometry/setMaterialDatabase    GateMaterials.db


#
#     W O R L D
#
/gate/world/geometry/setXLength       400. cm
/gate/world/geometry/setYLength       400. cm
/gate/world/geometry/setZLength       400. cm


#-------------------oooooOOOOO00000OOOOOooooo---------------------#
#                                                                 #
#     D E F I N I T I O N   A N D   D E S C R I T I O N           #
#        O F   Y O U R   P E T   D E V I C E                      #
#                                                                 #
#-------------------oooooOOOOO00000OOOOOooooo---------------------#

#	CYLINDRICAL
/gate/world/daughters/name                    cylindricalPET
/gate/world/daughters/insert                  cylinder
/gate/cylindricalPET/placement/setTranslation 0.0 0.0 0.0 cm
/gate/cylindricalPET/geometry/setRmax         52.0 cm
/gate/cylindricalPET/geometry/setRmin         39.9 cm
/gate/cylindricalPET/geometry/setHeight       40.2 cm
/gate/cylindricalPET/setMaterial              Air
/gate/cylindricalPET/vis/forceWireframe
/gate/cylindricalPET/vis/setColor             white

#	HEAD
/gate/cylindricalPET/daughters/name           head
/gate/cylindricalPET/daughters/insert         box
/gate/head/placement/setTranslation           44.0 0.0 0.0 cm
/gate/head/geometry/setXLength                8  cm
/gate/head/geometry/setYLength                32 cm
/gate/head/geometry/setZLength                40 cm
/gate/head/setMaterial                        Air
/gate/head/vis/setVisible                     0


#	BLOCK
/gate/head/daughters/name                     block
/gate/head/daughters/insert                   box
/gate/block/placement/setTranslation          0.0 0.0 0.0 cm
/gate/block/geometry/setXLength               30 mm
/gate/block/geometry/setYLength               16 mm
/gate/block/geometry/setZLength               20 mm
/gate/block/setMaterial                       Air
/gate/block/vis/setVisible                    0

#	C R Y S T A L
/gate/block/daughters/name                    crystal
/gate/block/daughters/insert                  box
/gate/crystal/placement/setTranslation        0.0 0.0 0.0 cm
/gate/crystal/geometry/setXLength             30 mm
/gate/crystal/geometry/setYLength             3.0 mm
/gate/crystal/geometry/setZLength             3.8 mm
/gate/crystal/setMaterial                     Air
/gate/crystal/vis/setVisible                  0


#	LSO layer
/gate/crystal/daughters/name                  LSO
/gate/crystal/daughters/insert                box
/gate/LSO/placement/setTranslation            -0.75 0.0 0.0 cm
/gate/LSO/geometry/setXLength                 15 mm
/gate/LSO/geometry/setYLength                 3.0 mm
/gate/LSO/geometry/setZLength                 3.8 mm
/gate/LSO/setMaterial                         LSO
/gate/LSO/vis/setColor                        red

#	BGO layer
/gate/crystal/daughters/name                  BGO
/gate/crystal/daughters/insert                box
/gate/BGO/placement/setTranslation            +0.75 0.0 0.0 cm
/gate/BGO/geometry/setXLength                 15 mm
/gate/BGO/geometry/setYLength                 3.0 mm
/gate/BGO/geometry/setZLength                 3.8 mm
/gate/BGO/setMaterial                         BGO
/gate/BGO/vis/setColor                        yellow

#	R E P E A T    C R Y S T A L
/gate/crystal/repeaters/insert                cubicArray
/gate/crystal/cubicArray/setRepeatNumberX     1
/gate/crystal/cubicArray/setRepeatNumberY     5
/gate/crystal/cubicArray/setRepeatNumberZ     5
/gate/crystal/cubicArray/setRepeatVector      0.0 3.2 4.0 mm


#	R E P E A T    BLOCK
/gate/block/repeaters/insert                  cubicArray
/gate/block/cubicArray/setRepeatNumberX       1
/gate/block/cubicArray/setRepeatNumberY       20
/gate/block/cubicArray/setRepeatNumberZ       20
/gate/block/cubicArray/setRepeatVector        0.0 1.6 2.0 cm


#	R E P E A T HEAD
/gate/head/repeaters/insert                   ring
/gate/head/ring/setRepeatNumber               4


#	A T T A C H    S Y S T E M 
/gate/systems/cylindricalPET/rsector/attach   head
/gate/systems/cylindricalPET/module/attach    block
/gate/systems/cylindricalPET/crystal/attach   crystal
/gate/systems/cylindricalPET/layer0/attach    LSO
/gate/systems/cylindricalPET/layer1/attach    BGO

#	A T T A C H    C R Y S T A L  SD

/gate/LSO/attachCrystalSD
/gate/BGO/attachCrystalSD


/gate/systems/cylindricalPET/describe

/gate/cylindricalPET/moves/insert             orbiting
/gate/cylindricalPET/orbiting/setSpeed        30 deg/s
/gate/cylindricalPET/orbiting/setPoint1       0 0 0 cm
/gate/cylindricalPET/orbiting/setPoint2       0 0 1 cm

#=====================================================
#  P H A N T O M
#=====================================================

#/gate/world/daughters/name                    phantom
#/gate/world/daughters/insert                  box

#/gate/phantom/geometry/setXLength             10 cm
#/gate/phantom/geometry/setYLength             10 cm
#/gate/phantom/geometry/setZLength             10 cm
#/gate/phantom/setMaterial                     Water
#/gate/phantom/vis/forceSolid
#/gate/phantom/vis/setColor                    blue

#/gate/phantom/attachPhantomSD


#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addPhysicsList empenelope
/gate/physics/processList Enabled
/gate/physics/processList Initialized

#=====================================================
# CUTS
#=====================================================

/gate/physics/Gamma/SetCutInRegion      LSO 1.0 cm
/gate/physics/Electron/SetCutInRegion   LSO 1.0 cm
/gate/physics/Positron/SetCutInRegion   LSO 1.0 cm

/gate/physics/Gamma/SetCutInRegion      BGO 1.0 cm
/gate/physics/Electron/SetCutInRegion   BGO 1.0 cm
/gate/physics/Positron/SetCutInRegion   BGO 1.0 cm


#/gate/physics/Gamma/SetCutInRegion      phantom 0.1 mm
#/gate/physics/Electron/SetCutInRegion   phantom 0.1 mm
#/gate/physics/Positron/SetCutInRegion   phantom 0.1 mm

#/gate/physics/SetMaxStepSizeInRegion    phantom 0.01 mm

#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize


#=====================================================
# Show how the geometry moves with time
#=====================================================

/control/execute                        MoveVisu.mac



#=====================================================
#  P A R T I C L E   S O U R C E
#=====================================================

 
/gate/source/addSource                                         posiC11

#/gate/source/posiC11/gps/particle                              e+
#/gate/source/posiC11/gps/energytype                            Carbon11
/gate/source/posiC11/setType backtoback

# The particles emitted by the source are gammas
/gate/source/posiC11/gps/particle gamma

# The gammas have an energy of 511 keV
/gate/source/posiC11/gps/energytype Mono
/gate/source/posiC11/gps/monoenergy 0.511 MeV

/gate/source/posiC11/setActivity                               10000 becquerel

/gate/source/posiC11/setForcedUnstableFlag                     true
/gate/source/posiC11/setForcedHalfLife                         1223 s
/gate/source/posiC11/gps/angtype                               iso

/gate/source/posiC11/visualize red

/gate/source/list




#=====================================================
#   D I G I T I Z E R: DETECTOR ELECTRONIC RESPONSE
#=====================================================

/gate/digitizer/Singles/insert                        adder
/gate/digitizer/Singles/insert                        readout
/gate/digitizer/Singles/readout/setDepth              1


#/gate/digitizer/Singles/insert                        thresholder
#/gate/digitizer/Singles/thresholder/setThreshold      350. keV
#/gate/digitizer/Singles/insert                        upholder
#/gate/digitizer/Singles/upholder/setUphold            650. keV



/gate/digitizer/name SinglesBlurring
/gate/digitizer/insert singleChain 
/gate/digitizer/SinglesBlurring/setInputName Singles 
/gate/digitizer/SinglesBlurring/insert                        blurring
/gate/digitizer/SinglesBlurring/blurring/setResolution        0.05
/gate/digitizer/SinglesBlurring/blurring/setEnergyOfReference 511. keV


/gate/digitizer/name SinglesNoise
/gate/digitizer/insert singleChain
#/gate/digitizer/SinglesBlurring/setInputName Singles 

/gate/distributions/name energy_distrib
/gate/distributions/insert Gaussian
/gate/distributions/energy_distrib/setMean 450 keV
/gate/distributions/energy_distrib/setSigma 1 keV

/gate/distributions/name dt_distrib
/gate/distributions/insert Exponential
/gate/distributions/dt_distrib/setLambda 75700 ns

/gate/digitizer/SinglesNoise/insert noise
/gate/digitizer/SinglesNoise/noise/setDeltaTDistribution dt_distrib
/gate/digitizer/SinglesNoise/noise/setEnergyDistribution energy_distrib

/gate/digitizer/name SinglesBlurringNoise
/gate/digitizer/insert singleChain
/gate/digitizer/SinglesBlurringNoise/setInputName SinglesBlurring
/gate/digitizer/SinglesBlurringNoise/insert noise
/gate/digitizer/SinglesBlurringNoise/noise/setDeltaTDistribution dt_distrib
/gate/digitizer/SinglesBlurringNoise/noise/setEnergyDistribution energy_distrib






#=====================================================
#	C O I N C I D E N C E    S O R T E R
#=====================================================

/gate/digitizer/Coincidences/setWindow          10. ns
/gate/digitizer/Coincidences/setDepth              1
/gate/digitizer/Coincidences/setOffset                 0. ns
#/gate/digitizer/Coincidences/setPresortBufferSize
/gate/digitizer/Coincidences/setInputName Singles
/gate/digitizer/Coincidences/MultiplesPolicy takeAllGoods
#/gate/digitizer/Coincidences/allPulseOpenCoincGate true

/gate/digitizer/name                            CoincidencesBlurring
/gate/digitizer/insert                          coincidenceSorter
/gate/digitizer/CoincidencesBlurring/setWindow                 10. ns
/gate/digitizer/CoincidencesBlurring/setOffset                 0. ns
/gate/digitizer/CoincidencesBlurring/setInputName SinglesBlurring
/gate/digitizer/CoincidencesBlurring/MultiplesPolicy takeAllGoods







/gate/output/tree/enable
/gate/output/tree/addFileName output/p.npy
/gate/output/tree/hits/enable
/gate/output/tree/addCollection Singles
/gate/output/tree/addCollection SinglesBlurring
/gate/output/tree/addCollection SinglesNoise
/gate/output/tree/addCollection SinglesBlurringNoise
/gate/output/tree/addCollection Coincidences
/gate/output/tree/addCollection CoincidencesBlurring





#====================================================
#  R A N D O M   E N G I N E  A N D  S E E D
#====================================================
/gate/random/setEngineSeed auto
#/gate/random/setEngineSeed 123456789


/gate/random/verbose 1

#=====================================================
#   M E A S U R E M E N T   S E T T I N G S   
#=====================================================

/gate/application/setTimeSlice   1 s
/gate/application/setTimeStart   0 s
/gate/application/setTimeStop    360 s

/gate/application/startDAQ
